
run("Duplicate...", "title=SNN");
run("8-bit"); 
width = getWidth();
height = getHeight();

for (y=1; y<height-1; y++) {
    for (x=1; x<width-1; x++) {

        center = getPixel(x,y);

        a = getPixel(x-1,y-1);
        b = getPixel(x,y-1);
        c = getPixel(x+1,y-1);
        d = getPixel(x-1,y);
        e = getPixel(x+1,y);
        f = getPixel(x-1,y+1);
        g = getPixel(x,y+1);
        h = getPixel(x+1,y+1);

      
        if (abs(a-center) < abs(h-center)) p1 = a; else p1 = h;
        if (abs(b-center) < abs(g-center)) p2 = b; else p2 = g;
        if (abs(c-center) < abs(f-center)) p3 = c; else p3 = f;
        if (abs(d-center) < abs(e-center)) p4 = d; else p4 = e;

    
        newValue = (p1 + p2 + p3 + p4) / 4.0;
        newValue = round(newValue);

        setPixel(x, y, newValue);
    }
}

print("Done - SNN filter 3x3 applied");
